PsychoPy2experiment version="2020.2.4"
Settings
  Data filename = u'data/sub-%s_task-%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1600, 900]
  color = black
  expName = prosocial-learning
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Routines
  Routine stimuli
    ImageComponent left
      image [set every repeat] = $stim_left_name
      pos = (-0.4, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent right
      image [set every repeat] = $stim_right_name
      pos = (0.4, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp
      allowedKeys = 'left', 'right'
      correctAns = $optimal_choice
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    CodeComponent store_chosen_stim
      Code Type = Auto->JS
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      End Routine:
        if position_changed == 0:
            if key_resp.keys == 'left':
                thisExp.addData('chosen_stim_name', stim_0)
                thisExp.addData('chosen_stim_0', 1)
                thisExp.addData('chosen_stim_1', 0)

                if goal == 'win':
                    thisExp.addData('true_accuracy', 1)
                elif goal == 'avoidloss':
                    thisExp.addData('true_accuracy', 0)

            elif key_resp.keys == 'right':
                thisExp.addData('chosen_stim_name', stim_1)
                thisExp.addData('chosen_stim_0', 0)
                thisExp.addData('chosen_stim_1', 1)

                if goal == 'win':
                    thisExp.addData('true_accuracy', 0)
                elif goal == 'avoidloss':
                    thisExp.addData('true_accuracy', 1)

        elif position_changed == 1:
            if key_resp.keys == 'left':
                thisExp.addData('chosen_stim_name', stim_1)
                thisExp.addData('chosen_stim_0', 0)
                thisExp.addData('chosen_stim_1', 1)

                if goal == 'win':
                    thisExp.addData('true_accuracy', 0)
                elif goal == 'avoidloss':
                    thisExp.addData('true_accuracy', 1)

            elif key_resp.keys == 'right':
                thisExp.addData('chosen_stim_name', stim_0)
                thisExp.addData('chosen_stim_0', 1)
                thisExp.addData('chosen_stim_1', 0)

                if goal == 'win':
                    thisExp.addData('true_accuracy', 1)
                elif goal == 'avoidloss':
                    thisExp.addData('true_accuracy', 0)
  Routine stimuli_feedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys == 'left':
            circlePos = (-0.4, 0)
        elif key_resp.keys == 'right':
            circlePos = (0.4, 0)
        else:
            # Offscreen
            circlePos = (0.0, 4.0)
    ImageComponent left_feedback
      image [set every repeat] = $stim_left_name
      pos = (-0.4, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent right_feedback
      image [set every repeat] = $stim_right_name
      pos = (0.4, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent circle
      image = stimuli/circle.png
      pos [set every repeat] = $circlePos
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine fixation
    PolygonComponent iti
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if not key_resp.keys:
            outcome = "missed"
            thisExp.addData('cumulativePts_self', ptsSelf)
            thisExp.addData('cumulativePts_social', ptsSocial)
            if condition != "practice":
                thisExp.addData('outcomeDescr', "missed")

        else:
            if key_resp.corr:
                if goal == "win":
                    if condition == "self":
                        outcome = "YOU\n\n+100 points"
                        ptsSelf += 100
                        thisExp.addData('cumulativePts_self', ptsSelf)
                        thisExp.addData('cumulativePts_social', ptsSocial)
                        thisExp.addData('outcomeDescr', "self win")
                        thisExp.addData('outcome', 1)

                    elif condition == "social":
                        outcome = "NEXT PARTICIPANT\n\n+100 points"
                        ptsSocial += 100
                        thisExp.addData('cumulativePts_social', ptsSocial)
                        thisExp.addData('cumulativePts_self', ptsSelf)
                        thisExp.addData('outcomeDescr', "social win")
                        thisExp.addData('outcome', 1)

                    elif condition == "practice":
                        outcome = "+100 points"

                elif goal == "avoidloss":
                    if condition == "self":
                        outcome = "YOU\n\n0 points"
                        ptsSelf += 0
                        thisExp.addData('cumulativePts_self', ptsSelf)
                        thisExp.addData('cumulativePts_social', ptsSocial)
                        thisExp.addData('outcomeDescr', "self avoid loss")
                        thisExp.addData('outcome', 0)

                    elif condition == "social":
                        outcome = "NEXT PARTICIPANT\n\n0 points"
                        ptsSocial += 0
                        thisExp.addData('cumulativePts_social', ptsSocial)
                        thisExp.addData('cumulativePts_self', ptsSelf)
                        thisExp.addData('outcomeDescr', "social avoid loss")
                        thisExp.addData('outcome', 0)

                    elif condition == "practice":
                        outcome = "0 points"
            else:
                if goal == "win":
                    if condition == "self":
                        outcome = "YOU\n\n0 points"
                        ptsSelf += 0
                        thisExp.addData('cumulativePts_self', ptsSelf)
                        thisExp.addData('cumulativePts_social', ptsSocial)
                        thisExp.addData('outcomeDescr', "self avoid win")
                        thisExp.addData('outcome', 0)

                    elif condition == "social":
                        outcome = "NEXT PARTICIPANT\n\n0 points"
                        ptsSocial += 0
                        thisExp.addData('cumulativePts_social', ptsSocial)
                        thisExp.addData('cumulativePts_self', ptsSelf)
                        thisExp.addData('outcomeDescr', "social avoid win")
                        thisExp.addData('outcome', 0)

                    elif condition == "practice":
                        outcome = "0 points"

                elif goal == "avoidloss":
                    if condition == "self":
                        outcome = "YOU\n\n-100 points"
                        ptsSelf -= 100
                        thisExp.addData('cumulativePts_self', ptsSelf)
                        thisExp.addData('cumulativePts_social', ptsSocial)
                        thisExp.addData('outcomeDescr', "self lose")
                        thisExp.addData('outcome', -1)

                    elif condition == "social":
                        outcome = "NEXT PARTICIPANT\n\n-100 points"
                        ptsSocial -= 100
                        thisExp.addData('cumulativePts_social', ptsSocial)
                        thisExp.addData('cumulativePts_self', ptsSelf)
                        thisExp.addData('outcomeDescr', "social lose")
                        thisExp.addData('outcome', -1)

                    elif condition == "practice":
                        outcome = "-100 points"

        if condition == "practice":
            thisExp.addData('cumulativePts_self', 1000)
            thisExp.addData('cumulativePts_social', 1000)
            thisExp.addData('outcomeDescr', "practice")
    TextComponent feedback_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $outcome
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  Routine ender
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if (ptsSelf > 0) and (ptsSocial > 0):
            end_result = f"You won {ptsSelf} points for YOURSELF!\n\nYou won {ptsSocial} points for the NEXT PARTICIPANT!"
        elif (ptsSelf > 0) and not (ptsSocial > 0):
            end_result = f"You won {ptsSelf} points for YOURSELF!"
        elif not (ptsSelf > 0) and (ptsSocial > 0):
            end_result = f"You won {ptsSocial} points for the NEXT PARTICIPANT!"
        else:
            end_result = ""

        #from psychopy import logging
        #logging.log(level=logging.WARN, msg=(f'Participant wins: {points} points'))
        #logging.flush()
        #
    TextComponent end_heading
      color = yellow
      letterHeight = 0.075
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Experiment complete!
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    TextComponent end_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_result
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_4
      letterHeight = 0.08
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to exit.
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  Routine BlockInstruct
    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        if trial_num != 0:
            continueRoutine = False
    TextComponent BlockInstr_disp
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $block_instr_text
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  Routine intro
    CodeComponent startup_code
      Code Type = Auto->JS
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      Begin Experiment:
        ptsSelf = 1000
        ptsSocial = 1000

        seed = int(expInfo['participant'])

        order_file = f"orders/sub-{expInfo['participant']}_stim-order.csv"

        #from psychopy import logging
        #logging.log(level=logging.EXP, msg=(f'Order loaded from file: {order_file}'))
        #logging.flush()
    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    TextComponent intro_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will see two symbols appear on the screen and you need to select one of them.

        Based on your choices, you can win or lose points. Points are converted into REAL MONEY at the end of the experiment.

        Press SPACE to continue.
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
  Routine instr1
    TextComponent instr_1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Some symbols will give you points more or less often than others. Your job is to figure out which symbol is the best to choose, and select it using your arrow keys.

        Press SPACE to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine prac_instr
    TextComponent read_prac
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Let’s try a few practice rounds.

        Sometimes you will play to win points. Other times, you will play to avoid losing points. The task will tell you which condition you are in.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr2
    TextComponent instr_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Respond using the LEFT and RIGHT arrow keys matching whichever side the symbol you choose appears. Sometimes the symbol might appear on the left while other times it might appear on the right.

        Try to respond as quickly and accurately as possible. You have about 2 seconds to make your choice.

        Press SPACE to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine instr3
    TextComponent instr_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        After each choice, you will see feedback.

        Sometimes you will win points, +100 points!
        Sometimes you will lose points, -100 points!
        Sometimes you will not win or lose, 0 points

        Press SPACE to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine instr4
    TextComponent instr_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now you will play the task in two conditions: for YOURSELF and for ANOTHER PARTICIPANT.

        Both you and the other participant start with 3 dollars, which you can lose from or add to up to 6 dollars.

        Press SPACE to continue.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine exp_instr
    TextComponent ready_exp
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Remember, your performance from now on will result in REAL MONETARY outcomes!

        When you are playing for yourself, you will receive any money you win. When you are playing for the other participant, they will receive any money you win for them. The other participant won’t know how much money you earn for them until they leave the experiment.

        Press SPACE to begin the experiment.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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Flow
  Routine intro
  Routine instr1
  Routine instr2
  Routine instr3
  Routine prac_instr
  LoopInitiator practice_round loopType="TrialHandler"
    conditionsFile = orders\prac_stim-order.csv
    isTrials = False
    loopType = sequential
    nReps = 0
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    Routine BlockInstruct
    Routine fixation
    Routine stimuli
    Routine stimuli_feedback
    Routine fixation
    Routine feedback
  LoopTerminator practice_round
  Routine instr4
  Routine exp_instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $order_file
    loopType = sequential
    nReps = 1
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    Routine BlockInstruct
    Routine fixation
    Routine stimuli
    Routine stimuli_feedback
    Routine fixation
    Routine feedback
  LoopTerminator trials
  Routine ender
